PsychoPy2experiment version="2023.2.3"
Settings
  Audio lib = ptb
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001'}
  Full-screen window = False
  Monitor = testMonitor
  Screen = 1
  Show info dlg = False
  Units = height
  Window size (pixels) = [1000, 700]
  expName = Tutorial_5
  keyboardBackend = ioHub
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Routines
  Routine trial
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    TextComponent text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3.0
      text [set every repeat] = $study_word
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    SliderComponent slider
      forceEndRoutine = True
      granularity = 0
      labels = "Familiar","Unfamilier"
      letterHeight = 0.05
      pos = (0, -0.3)
      size = (1.0, 0.1)
      startVal [time (s)] = 0.0
      styles = rating
      ticks = (1, 2, 3, 4, 5)
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  Routine test
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    TextComponent text_2
      color = 1.0000, -1.0000, -1.0000
      letterHeight = 0.05
      pos = (0, 0.3)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
      text [set every repeat] = $test
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    TextboxComponent textbox
      bold = False
      editable = True
      letterHeight = 0.05
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
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    TextComponent text_3
      letterHeight = 0.05
      pos = (0,-0.3)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
      text = click to submit
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    MouseComponent mouse
      clickable = text_3
      forceEndRoutineOnPress = valid click
      saveMouseState = on click
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
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Flow
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = C:/Users/HP/OneDrive/Documents/Psyco py/study_word.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
      [{'study_word': 'book'},
      {'study_word': 'cushion'},
      {'study_word': 'phone'},
      {'study_word': 'marble'},
      {'study_word': 'board'},
      {'study_word': 'laptop'},
      {'study_word': 'chart'},
      {'study_word': 'T-shirt'},
      {'study_word': 'mouse'},
      {'study_word': 'pastry'},
      {'study_word': 'case'},
      {'study_word': 'cruise'},
      {'study_word': 'police'},
      {'study_word': 'keys'},
      {'study_word': 'poster'},
      {'study_word': 'bird'},
      {'study_word': 'tree'},
      {'study_word': 'direction'},
      {'study_word': 'task'},
      {'study_word': 'Red'}]
    Routine trial
  LoopTerminator trials
  LoopInitiator trials_2 loopType="TrialHandler"
    conditionsFile = C:/Users/HP/OneDrive/Documents/Psyco py/test_words.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'test': '_a_e', 'Reference': 'vase', 'old_new': 'new'},
      {'test': 't_g_r', 'Reference': 'tiger', 'old_new': 'old '},
      {'test': '_oo_', 'Reference': 'book', 'old_new': 'old'},
      {'test': 'c_s_h_o_n', 'Reference': 'cushion', 'old_new': 'old'},
      {'test': '_ia_o', 'Reference': 'piano', 'old_new': 'old'},
      {'test': 'c_m_r_', 'Reference': 'camera', 'old_new': 'new'},
      {'test': '_h_ne', 'Reference': 'phone', 'old_new': 'old'},
      {'test': 'l_p_t_p', 'Reference': 'laptop', 'old_new': 'old'},
      {'test': '_ha_t', 'Reference': 'chart', 'old_new': 'old'},
      {'test': 'T_hi_t', 'Reference': 'T-shirt', 'old_new': 'old'},
      {'test': '_ou_se', 'Reference': 'mouse', 'old_new': 'old'},
      {'test': 'P_str_', 'Reference': 'Pastry', 'old_new': 'old'},
      {'test': 'K_y_', 'Reference': 'Keys', 'old_new': 'old'},
      {'test': 'P_li_e', 'Reference': 'Police', 'old_new': 'old'},
      {'test': '_ru_se', 'Reference': 'cruise', 'old_new': 'old'},
      {'test': 'P_ste_', 'Reference': 'poster', 'old_new': 'old'},
      {'test': '_sr_le', 'Reference': 'marble', 'old_new': 'old'},
      {'test': 'Pe_c_l', 'Reference': 'pencil', 'old_new': 'new'},
      {'test': 'T_bl_', 'Reference': 'table', 'old_new': 'new'},
      {'test': 'Bo__le', 'Reference': 'bottle', 'old_new': 'new'}]
    Routine test
  LoopTerminator trials_2
